CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140124145122
GitHash:0c7fb94
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders. Folder names adjusted to force the good one to go through first.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Load the plate image -- browse to locate the particular one that matches your imaging system. Image size and plate template should match. Load the template image as a binary mask. Original RGB pipeline protocol at http://www.cellprofiler.org/linked_files/Papers/31-Vokes_CurrentProtocols_2008.pdf. Note that all images and template must be the same size. This template is 1112x1112 pixels.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:1
    Select the rule criteria:and (file does startwith "plate")
    Name to assign these images:OrigColor
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Single image location:file:/Users/confocal/Downloads/cellprofiler/yeast%20grayscale%20colonies/input%20images/templates/PlateTemplatePaper1440_1076.tif   
    Name to assign this image:PlateTemplate
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Converts the RGB input image to a grayscale one.']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
    Select the input image:OrigColor
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
Align:[module_num:6|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notes:['Align the plate image to the binary Plate Template. This step accounts for experimental variation in the plate placement. The corrected Image is also aligned by the same offset. Note that all images must be the same size.']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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:PlateTemplate
    Name the first output image:AlignedPlate
    Select the second input image:OrigGray
    Name the second output image:AlignedGray

MaskImage:[module_num:7|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notes:['Mask the aligned image to the region of interest defined by the Plate Template. ']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
    Select the input image:AlignedGray
    Name the output image:MaskedGray
    Use objects or an image as a mask?:Image
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    Select image for mask:AlignedPlate
    Invert the mask?:No

CorrectIlluminationCalculate:[module_num:8|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notes:["Correct for uneven illumination by creating an illumination correction function. Since most of the image is background, we use the 'Background' method here. The idea is to smooth the function enough so that it reflects the uneven intensity variation."]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
    Select the input image:MaskedGray
    Name the output image:IllumGray
    Select how the illumination function is calculated:Background
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    Block size:22
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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notes:['Apply the illumination function previously created to correct the original image. ']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
    Select the input image:MaskedGray
    Name the output image:CorrGray
    Select the illumination function:IllumGray
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:10|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notes:['Identify all yeast colonies  within the plate. Adaptive threshold was added to compensate for differences in the colony intensity caused by the glare-suppressing paper plate mask ']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
    Select the input image:CorrGray
    Name the primary objects to be identified:Colonies
    Typical diameter of objects, in pixel units (Min,Max):2,30
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:ColonyOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.001,1
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Method to calculate adaptive window size:Image size
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
MeasureObjectSizeShape:[module_num:11|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notes:['Measure area and shape features of each colony.']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
    Select objects to measure:Colonies
    Calculate the Zernike features?:No

FilterObjects:[module_num:12|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
    Name the output objects:RoundColonies
    Select the object to filter:Colonies
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:FilteredObjects
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.7
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:RoundColonies
    Calculate the Zernike features?:No

ClassifyObjects:[module_num:14|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notes:['Classify each colony for the desired parameters.First, based on area in a histogram with three bins to distinguish tiny, small, and large colonies. Second, by position just to illustrate another parameter.']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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:RoundColonies
    Select the measurement to classify by:AreaShape_Area
    Select bin spacing:Evenly spaced bins
    Number of bins:10
    Lower threshold:0
    Use a bin for objects below the threshold?:No
    Upper threshold:100
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0,10,50,100
    Give each bin a name?:No
    Enter the bin names separated by commas:a0_10,a10_50,a50_100
    Retain an image of the classified objects?:No
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    Select the object name:Colonies
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    Method to select the cutoff:Mean
    Enter the cutoff value:.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:.5
    Use custom names for the bins?:No
    Enter the low-low bin name:LowLow
    Enter the low-high bin name:HighLow
    Enter the high-low bin name:LowHigh
    Enter the high-high bin name:HighHigh
    Retain an image of the classified objects?:No
    Enter the image name:ClassifiedNuclei

OverlayOutlines:[module_num:15|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notes:['Overlay the colony outlines upon the Masked Plate image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrGray
    Name the output image:OutlinedColonies
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:FilteredObjects
    Select outline color:Red

SaveImages:[module_num:16|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notes:['Save the outline overlay image. Save the image to the default output folder.']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
    Select the type of image to save:Image
    Select the image to save:OutlinedColonies
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigColor
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:17|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:MaskedGray
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigColor
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_masked
    Saved file format:png
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:18|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CorrGray
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigColor
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_corr
    Saved file format:png
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:19|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notes:['Export measurements to a comma-delimited file (.csv). Individual colony measurements will be saved to the Colonies .csv file, and image summaries to the Image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:No
    Data to export:Colonies
    Combine these object measurements with those of the previous object?:No
    File name:Colonies.csv
    Use the object name for the file name?:No
