CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140124145122
GitHash:0c7fb94
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:plate(?P<Plate>[0-9]{2})\\\\.tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', "Load the color image by matching files in the folder against the text '6-1.jpg'. Load the template image as a binary mask. See details on the pipeline protocol at http://www.cellprofiler.org/linked_files/Papers/31-Vokes_CurrentProtocols_2008.pdf."]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
    Assign a name to:Images matching rules
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    Match metadata:[{u'OrigGray': u'Plate', u'PlateTemplate': u'Plate'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does startwith "plate")
    Name to assign these images:OrigGray
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "PlateTemplate")
    Name to assign these images:PlateTemplate
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Plate
    Metadata category:Plate

CorrectIlluminationCalculate:[module_num:5|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notes:["Correct for uneven illumination by creating an illumination correction function. Since most of the image is background, we use the 'Background' method here. The idea is to smooth the function enough so that it reflects the uneven intensity variation."]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
    Select the input image:OrigGray
    Name the output image:IllumGray
    Select how the illumination function is calculated:Background
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    Block size:22
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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notes:['Apply the illumination function previously created to correct the original image. ']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
    Select the input image:OrigGray
    Name the output image:CorrGray
    Select the illumination function:IllumGray
    Select how the illumination function is applied:Subtract

Align:[module_num:7|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notes:['Align the plate image to the binary Plate Template. This step accounts for experimental variation in the plate placement. The corrected Image is also aligned by the same offset.']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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:PlateTemplate
    Name the first output image:AlignedPlate
    Select the second input image:CorrGray
    Name the second output image:AlignedGray

MaskImage:[module_num:8|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notes:['Mask the Combined Image to the region of interest defined by the Plate Template. (should this be the aligned version??)']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
    Select the input image:CorrGray
    Name the output image:MaskedGray
    Use objects or an image as a mask?:Image
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    Select image for mask:AlignedPlate
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify all yeast colonies  within the plate. Adjust the min/max diameter depending on the expected colony size in your own images.']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
    Select the input image:MaskedGray
    Name the primary objects to be identified:Colonies
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:ColonyOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,1
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:10|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notes:['Measure area and shape features of each colony.']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
    Select objects to measure:Colonies
    Calculate the Zernike features?:No

ClassifyObjects:[module_num:11|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notes:['Classify each colony for the desired parameters.First, based on area in a histogram with three bins to distinguish tiny, small, and large colonies. Second, by position']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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:2
    Select the object to be classified:Colonies
    Select the measurement to classify by:AreaShape_Area
    Select bin spacing:Custom-defined bins
    Number of bins:1
    Lower threshold:0
    Use a bin for objects below the threshold?:No
    Upper threshold:1
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,5,75,1300
    Give each bin a name?:Yes
    Enter the bin names separated by commas:Tiny,Small,Large
    Retain an image of the classified objects?:Yes
    Name the output image:SizeClassifiedColonies
    Select the object to be classified:Colonies
    Select the measurement to classify by:Location_Center_X
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:400,800
    Give each bin a name?:No
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    Retain an image of the classified objects?:Yes
    Name the output image:XClassifiedColonies
    Select the object name:Colonies
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    Method to select the cutoff:Mean
    Enter the cutoff value:.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:.5
    Use custom names for the bins?:No
    Enter the low-low bin name:LowLow
    Enter the low-high bin name:HighLow
    Enter the high-low bin name:LowHigh
    Enter the high-high bin name:HighHigh
    Retain an image of the classified objects?:No
    Enter the image name:ClassifiedNuclei

OverlayOutlines:[module_num:12|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notes:['Overlay the colony outlines upon the Masked Plate image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MaskedGray
    Name the output image:OutlinedColonies
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:ColonyOutlines
    Select outline color:Red

SaveImages:[module_num:13|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notes:["Save the outline overlay image as an 8-bit TIF, using the same name as the original image, plus '_outlines' as a suffix. Save the image to the default output folder."]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
    Select the type of image to save:Image
    Select the image to save:OutlinedColonies
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:plateoutline
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:14|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notes:["Export any measurements to a comma-delimited file (.csv). The measurements made for the colony objects will be saved to separate .csv files, in addition to the per-image .csv's."]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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image\\\\g<Plate>.csv
    Use the object name for the file name?:No
    Data to export:Colonies
    Combine these object measurements with those of the previous object?:No
    File name:Colonies\\\\g<Plate>.csv
    Use the object name for the file name?:No
